//  Main startup file for DC_HFAC simulation environment

//**********************************************************
// built in Neuron files
//**********************************************************
load_file("nrngui.hoc")			// open nrngui
load_proc("nrnmainmenu")

//**********************************************************
// mechanisms and cell definitions
//**********************************************************
load_file("select_mechanism.hoc")	// select mechanism
load_file("freq_dep_capacitance.hoc")
load_file("init_cell.hoc")

//**********************************************************
// electrode and waveform selection
//**********************************************************
objref selectbox		     // Main selection box
selectbox = new VBox()

load_file("electrode_selection.hoc")	// select electrode type
load_file("waveform_selection.hoc")	// select waveform
load_file("electrode_object.hoc")
load_file("electrode_controller.hoc")

//**********************************************************
// axon diameter handling 
//**********************************************************
load_file("diameter.hoc")			// diameter handling routines

//**********************************************************
// Creates the window for the multiple segment CNOW
//**********************************************************
load_file("SineRampControl.hoc")		// creates the trajectory electrode
load_file("trajectory_control.ses")	// trajectory builder control routines

//**********************************************************
// Creates the windows the recordings and opens the run
// control window
//**********************************************************
load_file("VoltAndSpaceGraphs.ses")	// open recording rig (node[11].v(0.5) & space plot of v)
load_file("RunCtrl.ses")		// open run control window with appropriate settings

//**********************************************************
// Functions that are used to determine the block threshold
//**********************************************************
load_file("APCountController.hoc")
load_file("ThreshFinder.hoc")
load_file("APCount-40mvRecordto(vec).hoc") 	// records APCount data to a vector "apvec"
load_file("run_tests.hoc")				// test function menu
load_file("advanceproc.hoc")

//**********************************************************
// Ability to save data to file 
//**********************************************************
load_file("save_to_file_UI.hoc")
load_file("save_to_file.hoc")

//**********************************************************
// Ability to vary multiple parameters
//**********************************************************
load_file("Vary_Parameters.hoc")
load_file("Vary_Parameters_UI.hoc")

//**********************************************************
// Test Experiment Procs
//**********************************************************
load_file("Multiple_Simulations.hoc")
load_file("Electrode_API.hoc")
load_file("SineRampRig.ses")